<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindChessboardCorners">
          <cv:PatternSize>
            <cv:Width>9</cv:Width>
            <cv:Height>6</cv:Height>
          </cv:PatternSize>
          <cv:CalibrationFlags>AdaptiveThreshold NormalizeImage FastCheck</cv:CalibrationFlags>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CalibrateCameraChessboard">
          <cv:PatternSize>
            <cv:Width>9</cv:Width>
            <cv:Height>6</cv:Height>
          </cv:PatternSize>
          <cv:CalibrationFlags>RationalModel</cv:CalibrationFlags>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Q</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:SaveIntrinsics">
          <cv:FileName>camera-intrinsics\ELP_intrinsics.yml</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>